Application:Application%20Window string WindowBackgroundColor=        0x000000   // Application window background color (color)
Application:Experiment           string TextFontColor=                0xffffff   // Color of text (color)
Application:PhotoDiodePatch      int    PhotoDiodePatchShape=         0          // Photo diode patch shape: 0 rectangle, 1 ellipse (enumeration)
Application:PhotoDiodePatch      int    PhotoDiodePatchActiveColor=   0xffffff   // Photo diode patch color when active (color)
Application:PhotoDiodePatch      int    PhotoDiodePatchInactiveColor= 0x000000   // Photo diode patch color when inactive (color)
Application:Sequencing           list   CueIconList=              2   images/ANTTask/white/ANT_cue_asterisk.png images/ANTTask/white/ANT_cursor.png // Cue stimulus list 
Application:Sequencing           matrix TargetMatrix=    { Target%20Pointing%20Left Target%20Pointing%20Right } { Flankers%20Pointing%20Left Flankers%20Pointing%20Right } images/ANTTask/white/TargetLeftFlankerLeft.png  images/ANTTask/white/TargetLeftFlankerRight.png  images/ANTTask/white/TargetRightFlankerLeft.png  images/ANTTask/white/TargetRightFlankerRight.png // Target stimulus matrix 
Application:Sequencing           matrix TargetR90Matrix= { Target%20Pointing%20Up   Target%20Pointing%20Down  } { Flankers%20Pointing%20Up   Flankers%20Pointing%20Down  } images/ANTTask/white/TargetUpFlankerUp.png      images/ANTTask/white/TargetUpFlankerDown.png     images/ANTTask/white/TargetDownFlankerUp.png     images/ANTTask/white/TargetDownFlankerDown.png   // Target rotate 90 stimulus matrix 
